begin parameters
Stot 100
kp0 3
ku1 14
kp1 15
ku2 98
kp2 75
ku3 686
kp3 375
ku4 4802
kp4 1875
ku5 33614
kp5 9375
ku6 235298
kp6 46875
ku7 1647086
kp7 234375
ku8 11529602
end parameters

begin molecule types
A(s1~u~p,s2~u~p,s3~u~p,s4~u~p,s5~u~p,s6~u~p,s7~u~p)
end molecule types

begin seed species
%init: A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) Stot
end seed species


begin reaction rules
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) ku3


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) ku3


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku2


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) ku3


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) ku4


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) ku4


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) ku3


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku2


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku2


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku1


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku2


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) ku3


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) ku3


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku2


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) ku3


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) ku4


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) ku4


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) ku3


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) ku4


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) ku5


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) ku5


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) kp4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) kp4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) kp4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) ku4


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) ku3


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) ku3


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku2


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) ku3


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) ku4


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) ku4


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) ku3


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) ku4


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) kp2


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) kp2


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) kp1


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) kp2


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) kp3


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) kp3


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) kp2


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) kp1


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) kp1


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) kp0


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) kp1


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) kp2


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) kp2


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) kp1


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) kp2


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) kp3


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) kp3


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) kp2


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) kp3


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) kp4


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) kp4


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) kp3


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) kp2


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) kp2


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u) ku1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) kp1


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) kp2


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) kp3


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) kp3


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u) ku2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) kp2


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u) kp3


end reaction rules

generate_network({overwrite=>1});